PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['null.png', 'void.png', 'gold.png', 'curse.png', '1.png']
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = Serotonin-test1
  keyboardBackend = ioHub
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Routines
  Routine trial
    ImageComponent image_4
      image = IMG_0436.jpeg.jpg
      saveStartStop = False
      size = (1.8, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    CodeComponent code1
      Code Type = Py
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      Begin Experiment:
        import random

        pairs = [(1, 2), (3, 4), (5, 6), (7, 8)]

        times = [0, 0, 0, 0]

        previous_case = 0
        present_case = 0
      Begin Routine:
        import random
        from psychopy.hardware import keyboard


        while present_case == previous_case and sum(times) < 96:
            present_case = random.randint(0, 3)
            # print(present_case)
            if (times[present_case] >= 24):
                present_case = previous_case
        #    if sum(times) >= 16:
        #        break
        times[present_case] += 1
        previous_case = present_case

        if(times[present_case]%2):
            image1 = pairs[present_case][0]
            image2 = pairs[present_case][1]
        else:
            image1 = pairs[present_case][1]
            image2 = pairs[present_case][0]

        img1 = image1
        img2 = image2

        image1 = "C:/Users/91628/Downloads/" + str(image1) + ".png"
        image2 =  "C:/Users/91628/Downloads/" + str(image2) + ".png"

        selected = keyboard.Keyboard(bufferSize=1)
        selected.clearEvents(eventType='keyboard')


        #print(keys[0].name)
      Each Frame:
        keys = selected.getKeys(keyList=["right", "left"], waitRelease=True)

        if keys:
            continueRoutine = False
    ImageComponent image_5
      image [set every repeat] = $image1
      pos = (-0.4, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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    ImageComponent image_6
      image [set every repeat] = $image2
      pos = (0.4, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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    TextComponent text_2
      letterHeight = 0.025
      pos = (0, 0.45)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = $score
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  Routine Instructions
    ImageComponent image
      image = dl.beatsnoop.com-final-4sLrpV8NGn.jpg
      size = (1.8, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 5.0
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    SoundComponent sound_1
      saveStartStop = False
      sound = bgm.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    TextComponent Instructions_Main
      color = 1.0000, 0.6863, -1.0000
      font = Times Newr
      letterHeight = 0.025
      pos = [0,-0.2]
      startVal [time (s)] = 0.0
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      text:
        Greetings, Explorer!

        We warmly welcome you to Egypt. While participating in the treasure hunt, you will encounter a puzzle that involves choosing symbols to discover hidden treasures. However, be aware that certain symbols may cause your gold to diminish due to curses.

        To maximize your gold, observe and learn from the trial rounds to understand the correlation between symbols and their effects on gold and curses.

        We wish you the best of luck!
    TextComponent continu
      letterHeight = 0.03
      pos = (0.4, -0.4)
      startVal [time (s)] = 5
      text = Press spacebar to continue
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    CodeComponent code_5
      Code Type = Py
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      Begin Experiment:
        import csv

        part = expInfo['participant']
        name = str(part) + ".csv"

        output_file = open(name, "w")

        writer = csv.writer(output_file)
        Header = ["case","image1", "probability1", "image2", "probability2", "user_choice", "score"]

        writer.writerow(Header)
      End Experiment:
        output_file.close()
  Routine Instructions_2
    SoundComponent sound_2
      sound = entry.wav
      startVal [time (s)] = 0.0
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    ImageComponent image_2
      image = dl.beatsnoop.com-final-hNQOS7C1XA.jpg
      size = (1.8, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3
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    TextComponent Instructions_Main_2
      color = 1.0000, 1.0000, 1.0000
      font = Times Newr
      letterHeight = 0.035
      pos = [0,-0.2]
      startVal [time (s)] = 0.0
      text = You have now entered a mirrored reality where you can attempt the puzzle 16 times. Each attempt will provide an opportunity for you to learn from the outcomes, but none of these outcomes will have any impact on your actual reality in terms of gold or curses
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    TextComponent continu_2
      letterHeight = 0.03
      pos = (0.4, -0.4)
      startVal [time (s)] = 3
      text = Press spacebar to continue
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  Routine Instructions_3
    ImageComponent image_3
      image = dl.beatsnoop.com-final-hNQOS7C1XA.jpg
      size = (1.8, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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    TextComponent Instructions_Main_3
      color = 1.0000, 1.0000, 1.0000
      font = Times Newr
      letterHeight = 0.035
      pos = [0,-0.2]
      startVal [time (s)] = 0.0
      text = Use left and right arrows to select the desired symbol
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    TextComponent continu_3
      letterHeight = 0.03
      pos = (0.4, -0.4)
      startVal [time (s)] = 1
      text = Press spacebar to continue
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  Routine Eval
  Routine trial_2
    CodeComponent code_2
      Code Type = Py
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      Begin Experiment:
        arrow_x = 0
        arrow_y = 0
      Begin Routine:
        arrow_y = -0.16

        if keys:
            if keys[-1] == "right":
                arrow_x = 0.4
            elif keys[-1] == "left":
                arrow_x = -0.4
        else:
            arrow_x = 5
    ImageComponent image_8
      image = IMG_0436.jpeg.jpg
      saveStartStop = False
      size = (1.8, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent image_9
      image [set every repeat] = $image1
      pos = (-0.4, 0)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent image_10
      image [set every repeat] = $image2
      pos = (0.4, 0)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent image_11
      image [set every repeat] = arrow.png
      pos [set every repeat] = (arrow_x, arrow_y)
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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  Routine trial_3
    CodeComponent code_3
      Code Type = Py
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      Begin Experiment:
        cases = ["cr", "pr", "cp", "pp"]

        gold = "gold.png"
        zero = "void.png"
        curse = "curse.png"
        null = "null.png"

        curr_sound = "null.wav"

        img_arr = [gold, zero, curse]

        score = 0

        error_msg = ""
      Begin Routine:
        import random
        left_img = image1
        right_img = image2
        choice = ""
        if keys:
            choice = keys[-1].name

        def prob(present_case):
            p = [0, 0]
            value1 = random.randint(1, 4)
            value2 = random.randint(1, 4)
            if value1 > 1:
                p[0] = 1
            if value2 == 1:
                p[1] = 1
            if present_case%2 != 0:
                temp = p[0]
                p[0] = p[1]
                p[1] = temp
            return p

        if choice:
            error_msg = null
            p = prob(present_case)

            if present_case < 2:
                probability1 = 1 if p[0] == 0 else 0
                probability2 = 1 if p[1] == 0 else 0
            else:
                probability1 = p[0]
                probability2 = p[1]
            #["case","image1", "probability1", "image2", "probability2", "user_choice", "score"]

            rowdata = [cases[present_case], img1, probability1, img2, probability2, choice, score]
            writer.writerow(rowdata)

            if present_case == 0:
                if (choice == "right" and p[1] == 0) or (choice == "left" and p[0] == 0):
                    curr_sound = "reward.wav"
                    score += 1
                left_img = img_arr[p[0]]
                right_img = img_arr[p[1]]
            elif present_case == 1:
                if choice == "right":
                    if p[1] == 0:
                        curr_sound = "reward.wav"
                        score += 1
                    right_img = img_arr[p[1]]
                    left_img = null
                elif choice == "left":
                    if p[0] == 0:
                        curr_sound = "reward.wav"
                        score += 1
                    left_img = img_arr[p[0]]
                    right_img = null
            elif present_case == 2:
                if (choice == "right" and p[1] == 1) or (choice == "left" and p[0] == 1):
                    curr_sound = "curse.wav"
                    score -= 1
                left_img = img_arr[1 + p[0]]
                right_img = img_arr[1 + p[1]]
            elif present_case == 3:
                if choice == "right":
                    if p[1] == 1:
                        curr_sound = "curse.wav"
                        score -= 1
                    right_img = img_arr[1 + p[1]]
                    left_img = null
                elif choice == "left":
                    if p[0] == 1:
                        curr_sound = "curse.wav"
                        score -= 1
                    left_img = img_arr[1 + p[0]]
                    right_img = null
        else:
            error_msg = "error.png"
      End Routine:
        curr_sound = "null.wav"
        selected.clearEvents(eventType='keyboard')
    ImageComponent image_12
      image = IMG_0436.jpeg.jpg
      saveStartStop = False
      size = (1.8, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    ImageComponent image_13
      image [set every repeat] = $left_img
      pos = (-0.4, 0)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
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    ImageComponent image_14
      image [set every repeat] = $right_img
      pos = (0.4, 0)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
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    SoundComponent sound_3
      saveStartStop = False
      sound [set every repeat] = $curr_sound
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    ImageComponent image_15
      image [set every repeat] = arrow.png
      pos [set every repeat] = (arrow_x, arrow_y)
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
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    ImageComponent image_29
      image [set every repeat] = $error_msg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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  Routine reset
    CodeComponent code_4
      Code Type = Py
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      Begin Routine:
        times = [0, 0, 0, 0]

        previous_case = 0
        present_case = 0
  Routine routine_1
    TextComponent text_instr
      letterHeight = 0.04
      pos = (-0.3, 0.25)
      startVal [time (s)] = 0.0
      text = $"This is a template" + " \n on how to use" + "\n the text component" + " \n to present instructions."
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    ImageComponent image_instr1
      image = instruct1.png
      pos = (-0.3, 0)
      startVal [time (s)] = 0.0
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    ImageComponent image_instr2
      image = instruct2.png
      pos = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent image_illus
      image = click.png
      pos = (0.3, 0)
      startVal [time (s)] = 0.0
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    ImageComponent image_next
      image = next.png
      pos = (0.6, -0.4)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      clickable = image_next
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine main_instructions
    ImageComponent image_7
      image = dl.beatsnoop.com-final-hNQOS7C1XA.jpg
      saveStartStop = False
      size = (1.8, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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    TextComponent Instructions_Main_4
      color = 1.0000, 1.0000, 1.0000
      font = Times Newr
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        Welcome to the main reality of our game. Your goal is to solve the puzzle and collect as much gold as possible while avoiding curses that may reduce your gold. You will have a limited number of attempts to complete the puzzle, so use them wisely.

        As you progress, you will encounter same symbols that were in mirror dimension that may have similar effects on your gold and curses. Take note of these effects and learn from your previous attempts to increase your chances of success.

        Remember that your gold and curses in this reality are real and will impact your overall score. So, be cautious and strategic in your approach to maximize your rewards.

        Good luck, and have fun!
    TextComponent continu_4
      letterHeight = 0.03
      pos = (0.4, -0.4)
      startVal [time (s)] = 1
      text = Press spacebar to continue
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    SoundComponent sound_7
      sound = reality.wav
      startVal [time (s)] = 0.0
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  Routine End_Screen
    ImageComponent image_16
      image = dl.beatsnoop.com-final-4sLrpV8NGn.jpg
      size = (1.8, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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    SoundComponent sound_4
      saveStartStop = False
      sound = post.wav
      startVal [time (s)] = 0.0
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    TextComponent Instructions_Main_5
      color = 0.9608, 0.9608, 0.6471
      font = Times Newr
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        Congratulations on making it this far in the game! We hope you're having a great time so far. As you know, the symbols in the game can have different effects on your gold and curses. In order to better understand your values associated with these symbols, we would like to ask you to play one more quick round.

        Don't worry, you won't lose any gold or suffer any curses in this round. Instead, we simply want to gather some data on the values of the symbols. This will help us analyze your values associated with the symbols

        As an added incentive, we'd like to share a short story with you. Legend has it that there's a hidden treasure deep in the heart of the desert, guarded by a mysterious Sphinx. The Sphinx has the power to grant wealth and prosperity to anyone who can solve its riddles and decipher its secrets. By playing this quick round and helping us gather data, you'll be one step closer to unlocking the treasure and achieving true riches.

        To play the quick round, simply follow these instructions:

        Select the "Space Bar" optionx
        .
        Choose the symbols you think will yield the most gold.

        Once you've completed the quick round, we'll display your score from the main game. So, what are you waiting for? Take a shot at solving the Sphinx's riddles and unlocking the treasure of the desert!
    TextComponent continu_5
      letterHeight = 0.03
      pos = (0.4, -0.4)
      startVal [time (s)] = 2
      text = Press spacebar to continue
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  Routine trial_4
    ImageComponent image_17
      image = IMG_0436.jpeg.jpg
      saveStartStop = False
      size = (1.8, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    CodeComponent code_6
      Code Type = Py
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      Begin Experiment:
        import random

        pairs = [(1, 2), (3, 4), (5, 6), (7, 8)]

        times = [0, 0, 0, 0]
        number = 0

        previous_case = 0
        present_case = 0

        loop = 0

        order = []
      Begin Routine:
        import random
        from psychopy.hardware import keyboard


        if number%4 == 0:
            order = []
            while len(order) < 4:
                temp = random.randint(0, 3)
                if temp not in order:
                    order.append(temp)

        number += 1
        present_case = order[number%4]

        maybe = random.randint(0, 50)

        if(maybe%3):
            image1 = pairs[present_case][0]
            image2 = pairs[present_case][1]
        else:
            image1 = pairs[present_case][1]
            image2 = pairs[present_case][0]

        img1 = image1
        img2 = image2

        image1 = str(image1) + ".png"
        image2 =  str(image2) + ".png"

        selected = keyboard.Keyboard(bufferSize=1)
        selected.clearEvents(eventType='keyboard')

        loop += 1
        #print(keys[0].name)
      Each Frame:
        keys = selected.getKeys(keyList=["right", "left"], waitRelease=True)

        if keys:
            continueRoutine = False
    ImageComponent image_18
      image [set every repeat] = $image1
      pos = (-0.4, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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    ImageComponent image_19
      image [set every repeat] = $image2
      pos = (0.4, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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  Routine trial_5
    ImageComponent image_20
      image = IMG_0436.jpeg.jpg
      saveStartStop = False
      size = (1.8, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    CodeComponent code_7
      Code Type = Py
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      Begin Experiment:
        import random

        pairs = [(1, 2), (3, 4), (5, 6), (7, 8)]

        times = [0, 0, 0, 0]

        previous_case = 0
        present_case = 0
      Begin Routine:
        import random
        from psychopy.hardware import keyboard


        while present_case == previous_case and sum(times) < 112:
            present_case = random.randint(0, 3)
            # print(present_case)
            if (times[present_case] >= 28):
                present_case = previous_case
        #    if sum(times) >= 112:
        #        break
        times[present_case] += 1
        previous_case = present_case

        if(times[present_case]%2):
            image1 = pairs[present_case][0]
            image2 = pairs[present_case][1]
        else:
            image1 = pairs[present_case][1]
            image2 = pairs[present_case][0]

        image1 = "C:/Users/91628/Downloads/" + str(image1) + ".png"
        image2 =  "C:/Users/91628/Downloads/" + str(image2) + ".png"

        selected = keyboard.Keyboard(bufferSize=1)
        selected.clearEvents(eventType='keyboard')


        #print(keys[0].name)
      Each Frame:
        keys = selected.getKeys(keyList=["right", "left"], waitRelease=True)

        if keys:
            continueRoutine = False
    ImageComponent image_21
      image [set every repeat] = $image1
      pos = (-0.4, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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    ImageComponent image_22
      image [set every repeat] = $image2
      pos = (0.4, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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  Routine reset_2
    CodeComponent code
      Code Type = Py
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      Before Experiment:
        score = 0
        rounds = 1
  Routine Final_Score_and_Good_Bye
    ImageComponent image_23
      image = dl.beatsnoop.com-final-4sLrpV8NGn.jpg
      size = (1.8, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_6
      allowedKeys = 'r'
      forceEndRoutine = True
      startVal [time (s)] = 5.0
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    SoundComponent sound_5
      saveStartStop = False
      sound = end.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    TextComponent Instructions_Main_6
      color = 1.0000, 0.6863, -1.0000
      font = Times Newr
      letterHeight = 0.025
      pos = [0,-0.2]
      startVal [time (s)] = 0.0
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      text [set every frame]:
        $"Absolutely! Thank you for playing our game. We hope you had a great time exploring the mysteries of ancient Egypt and uncovering hidden treasures.\n\nNow, without further ado, we are pleased to present your final score:\n\n"+str(score)+"\n\nWe hope you enjoyed playing the game as much as we enjoyed creating it. We appreciate your participation and feedback.\n\nThank you again for playing, and best of luck on all your future quests! Goodbye!"
  Routine Rounds
    SoundComponent sound_6
      sound = rounds.wav
      startVal [time (s)] = 0.0
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    ImageComponent image_24
      image = dl.beatsnoop.com-final-hNQOS7C1XA.jpg
      size = (1.8, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3
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    TextComponent Instructions_Main_7
      color = 1.0000, 1.0000, 1.0000
      font = Times Newr
      letterHeight = 0.035
      pos = [0,-0.2]
      startVal [time (s)] = 0.0
      text [set every repeat] = $"Round"+str(rounds)+"/4"
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    TextComponent continu_6
      letterHeight = 0.03
      pos = (0.4, -0.4)
      startVal [time (s)] = 3
      text = Press spacebar to continue
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    CodeComponent code_9
      Code Type = Py
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      Begin Routine:
        rounds += 1
  Routine trial_6
    CodeComponent code_8
      Code Type = Py
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      Begin Experiment:
        arrow_x = 0
        arrow_y = 0
      Begin Routine:
        arrow_y = -0.16

        if keys:
            if keys[-1] == "right":
                arrow_x = 0.4
            elif keys[-1] == "left":
                arrow_x = -0.4
        else:
            arrow_x = 5
    ImageComponent image_25
      image = IMG_0436.jpeg.jpg
      saveStartStop = False
      size = (1.8, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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    ImageComponent image_26
      image [set every repeat] = $image1
      pos = (-0.4, 0)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent image_27
      image [set every repeat] = $image2
      pos = (0.4, 0)
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent image_28
      image [set every repeat] = arrow.png
      pos [set every repeat] = (arrow_x, arrow_y)
      size = (0.1, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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  Routine error
    CodeComponent code_11
      Code Type = Py
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      Begin Experiment:
        cases = ["cr", "pr", "cp", "pp"]

        gold = "gold.png"
        zero = "void.png"
        curse = "curse.png"
        null = "null.png"

        img_arr = [gold, zero, curse]

        score = 0

        error_msg = ""
      Begin Routine:
        import random
        import time
        left_img = image1
        right_img = image2
        choice = ""
        if keys:
            choice = keys[-1].name


        if choice:
            error_msg = null
            rowdata = [present_case, img1,  img2, choice ]
            writer.writerow(rowdata)
        else:
            error_msg = "error.png"
      End Routine:
        curr_sound = "null.wav"
        selected.clearEvents(eventType='keyboard')
    ImageComponent image_30
      image = IMG_0436.jpeg.jpg
      saveStartStop = False
      size = (1.8, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent image_34
      image [set every repeat] = $error_msg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine trial_7
    ImageComponent image_31
      image = IMG_0436.jpeg.jpg
      saveStartStop = False
      size = (1.8, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    CodeComponent code_10
      Code Type = Py
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      Begin Experiment:
        import random

        repeated_array = []
        array_element = []
        for i in range(0, 8):
            for j in range(i + 1, 8):
                array_element.append((i, j))

        for i in range(4):
            for element in array_element:
                repeated_array.append(element)

        post_learn = repeated_array

        times = [0, 0, 0, 0]
        number = 0


        loop = 0
      Begin Routine:
        import random
        from psychopy.hardware import keyboard




        number += 1
        present_case = random.choice(post_learn)
        to_delete_index = post_learn.index(present_case)
        post_learn.pop(to_delete_index)

        maybe = random.randint(1, 51)

        if(maybe%3):
            image1 = present_case[0]
            image2 = present_case[1]
        else:
            image1 = present_case[1]
            image2 = present_case[0]

        img1 = image1
        img2 = image2

        image1 = str(image1) + ".png"
        image2 =  str(image2) + ".png"

        selected = keyboard.Keyboard(bufferSize=1)
        selected.clearEvents(eventType='keyboard')

        loop += 1
        #print(keys[0].name)
      Each Frame:
        keys = selected.getKeys(keyList=["right", "left"], waitRelease=True)

        if keys:
            continueRoutine = False
    ImageComponent image_32
      image [set every repeat] = $image1
      pos = (-0.4, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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    ImageComponent image_33
      image [set every repeat] = $image2
      pos = (0.4, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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Flow
  Routine Instructions
  Routine Instructions_2
  Routine Instructions_3
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 16
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    Routine trial_4
    Routine trial_2
    Routine trial_3
  LoopTerminator trials
  Routine reset_2
  Routine main_instructions
  LoopInitiator trials_3 loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 4
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    Routine Rounds
    LoopInitiator trials_2 loopType="TrialHandler"
      loopType = sequential
      nReps = 96
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      Routine trial_4
      Routine trial_2
      Routine trial_3
    LoopTerminator trials_2
  LoopTerminator trials_3
  Routine End_Screen
  LoopInitiator trials_4 loopType="TrialHandler"
    loopType = sequential
    nReps = 112
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    Routine trial_7
    Routine trial_6
    Routine error
  LoopTerminator trials_4
  Routine Final_Score_and_Good_Bye
